PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Completed URL = $"https://tamu.qualtrics.com/jfe/form/SV_cVbfZbAr2BwsVgO?id="+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1707, 1067]
  expName = media_eyes
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  tbModel = Tobii Pro Nano
  tbSampleRate = 60
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Routines
  Routine instruction_1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating in our experiment. 
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  Routine instruction_2
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, the task includes three parts.

        In the first part, you will complete an eye-tracker calibration procedure.

        In this part, you will follow the instructions by fixating at the point on the screen, while avoiding moving your head.

        Press spacebar on your keyboard to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_3
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the second part, you will watch a movie trailer.

        You may watch the trailer freely at your will.

        You should maintain your attention on the movie trailer and avoid moving your head.

        Press the spacebar on your keyboard to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screen_fixation
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction_4
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the third part, you will respond to some questions about the movie trailer you have just watched.

        These three parts will be repeated for several times.

        There will be a training session that will familarize you with how to complete the study.

        Press the spacebar on your keyboard to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_5
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you will complete a training session that will help you familarize with these three parts in the experiment.

        Please read the instructions carefully and follow the instructions step-by-step.

        We ask you to take this study seriously.

        Please focus only on this study, and not anything else.

        Please the spacebar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration_training
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine watch_training
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent training_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimulus/trailers/stimulus_training.mp4
      size = (1.2, 0.675)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 1.0
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    EyetrackerRecordComponent etRecord_training
      actionType = Start and Stop
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 11
      syncScreenRefresh = False
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  Routine calibration_instruction
    TextComponent text_6
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        During calibration procedure, you need to fixate on the point showing on the screen.

        When the point is showing on the screen, do not move your head and keep fixating the point.

        The point will look like below.
    TextComponent text_7
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the spacebar on your keyboard to continue.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent calibration_fixation_training
      image = stimulus/training_fixation.png
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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  Routine watching_instruction
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you will watch a movie trailer.

        You may watch the movie trailer at your free will.

        You need to keep your attention on the movie trailer, and try to minimize head movement.

        Press the spacebar on your keyboard to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_1
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you have watched the movie trailer, you will respond to several questions about how you feel about the movie trailer you just watched.

        To answer these questions, you will press the number key from 1 to 9 on your keyboard to choose the corresponding option.

        Press spacebar on your keyboard to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_2
    TextComponent text_10
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Now you have watched the movie trailer. You will indicate how happy/sad you feel about it.

        Which picture below best describes your feelings about how sad or happy the movie trailer was?

        Please note the frowning figure onthe left indicates very sad, while the smiling figure on the right indicates very happy.

        Press the number key 1 to 9 to choose a coressponding option.
    KeyboardComponent key_resp_training_happy_sad
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad1_image
      image = SAM/Sad1.jpg
      pos = (-0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad2_image
      image = SAM/Sad2.jpg
      pos = (-0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad3_image
      image = SAM/Sad3.jpg
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad4_image
      image = SAM/Sad4.jpg
      pos = (0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad5_image
      image = SAM/Sad5.jpg
      pos = (0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent sam_sad_number1
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent sam_sad_number2
      letterHeight = 0.03
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent sam_sad_number3
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent sam_sad_number4
      letterHeight = 0.03
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent sam_sad_number5
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent sam_sad_number6
      letterHeight = 0.03
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent sam_sad_number7
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent sam_sad_number8
      letterHeight = 0.03
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent sam_sad_number9
      letterHeight = 0.03
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent sam_sad_text
      letterHeight = 0.03
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Sad
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    TextComponent sam_happy_text
      letterHeight = 0.03
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Happy
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  Routine response_instruction_3
    TextComponent text_11
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate how excited/boring you feel about the movie trailer.

        Which picture below best describes your feelings about how excited or boring the movie trailer was?

        Please note the sleepy figure on the left indicates very boring, while the exploding figure on the right indicates very exciting.

        Press the number key 1 to 9 to choose a coressponding option.
    KeyboardComponent key_resp_training_excited_boring
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored1_image
      image = SAM/Excited1.jpg
      pos = (-0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored2_image
      image = SAM/Excited2.jpg
      pos = (-0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored3_image
      image = SAM/Excited3.jpg
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored5_image
      image = SAM/Excited4.jpg
      pos = (0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored4_image
      image = SAM/Excited5.jpg
      pos = (0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent sam_bored_number1
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent sam_bored_number2
      letterHeight = 0.03
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent sam_bored_number3
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent sam_bored_number4
      letterHeight = 0.03
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent sam_bored_number5
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent sam_bored_number6
      letterHeight = 0.03
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent sam_bored_number7
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent sam_bored_number8
      letterHeight = 0.03
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent sam_bored_number9
      letterHeight = 0.03
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent sam_bored_text
      letterHeight = 0.03
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Boring
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    TextComponent sam_excited_text
      letterHeight = 0.03
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Exciting
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  Routine response_instruction_4
    TextComponent text_12
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate which genre best describes the movie you just watched.

        Which of the following genres do you think best describes the movie that you just watched?

        Press the number key 1 to 6 to choose a coressponding option.
    TextComponent genre_thriller
      letterHeight = 0.03
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        Thriller
    TextComponent genre_horror
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        Horror
    TextComponent genre_drama
      letterHeight = 0.03
      pos = (-0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        3

        Drama
    TextComponent genre_action
      letterHeight = 0.03
      pos = (0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        4

        Action
    TextComponent genre_romance
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        5

        Romance
    TextComponent genre_comedy
      letterHeight = 0.03
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        6

        Comedy
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_7
    TextComponent text_15
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate how much you are willing to pay for the movie.

        If you were to purchase a movie ticket in a movie theater for the movie you just watched, how much are you willing to pay for it?

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent willing_pay_1
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        \$1
    TextComponent willing_pay_2
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        \$2
    TextComponent willing_pay_3
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        3

        \$3
    TextComponent willing_pay_4
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
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      text:
        4

        \$4
    TextComponent willing_pay_5
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        5

        \$5
    TextComponent willing_pay_6
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
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      text:
        6

        \$6
    TextComponent willing_pay_7
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        7

        \$7
    TextComponent willing_pay_8
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
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      text:
        8

        \$8
    TextComponent willing_pay_9
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        9

        \$9
    KeyboardComponent key_resp_training_willing_pay
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_8
    TextComponent text_16
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate whether you have watched this movie trailer before.

        Have you watched this movie trailer before?

        Press the number key 1 or 2 on your keyboard to choose a coressponding option.
    TextComponent watched_trailer_no
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        1

        No, I have not watched this trailer before.
    TextComponent watched_trailer_yes
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        2

        Yes, I have watched this trailer before.
    KeyboardComponent key_resp_traininig_watched_trailer
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_9
    TextComponent text_17
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate whether you have watched this movie before.

        Have you watched this movie before?

        Press the number key 1 or 2 on your keyboard to choose a coressponding option.
    TextComponent watched_movie_no
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        1

        No, I have not watched this movie before.
    TextComponent watched_movie_yes
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        2

        Yes, I have watched this movie before.
    KeyboardComponent key_resp_training_watched_movie
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_10
    TextComponent text_18
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you have completed this training session.

        You will proceed to the experiment, which will repeat these three tasks for several times.

        You may take a short break before you continue to the experiment.

        Press the spacebar on your keyboard to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine watch_session
    PolygonComponent fixation_test
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MovieComponent viewing_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $trailer_condition
      size = (1.2, 0.675)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 140
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    PolygonComponent fixation_test_2
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 145
      stopVal [duration (s)] = 3
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    EyetrackerRecordComponent etRecord_test
      actionType = Start and Stop
      startVal [time (s)] = 4
      stopVal [duration (s)] = 142
      syncScreenRefresh = False
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  Routine rest_session
    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed this session.

        Now, please take a short break.

        When you are ready, press spacebar on your keyboard to continue to the next session.
    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_instruction
    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        You have completed all of the sessions!

        Now, you will be redirected to complete a questionnaire.

        Press the spacebar on your keyboard to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        import webbrowser

        url = "https://tamu.qualtrics.com/jfe/form/SV_cVbfZbAr2BwsVgO?id="+expInfo['participant']

        webbrowser.open(url)
  EyetrackerCalibrationRoutine calibration_test
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine response_instruction_6
    TextComponent text_13
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate how much you enjoyed watching the movie trailer.

        How much did you enjoy watching the movie trailer?

        Please rate your enjoyment on a scale from 1 to 9, where 1 means you didn’t enjoy it at all and 9 means you enjoyed it extremely.

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent enjoyment_number_1
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent enjoyment_not_text
      letterHeight = 0.04
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Did not enjoy at all
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    TextComponent enjoyment_number_2
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent enjoyment_number_3
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent enjoyment_number_4
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent enjoyment_number_5
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent enjoyment_number_6
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent enjoyment_number_7
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent enjoyment_number_8
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent enjoyment_number_9
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent enjoyment_yes_text
      letterHeight = 0.04
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Enjoyed extremely
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    KeyboardComponent key_resp_9
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_instruction_5
    TextComponent text_14
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next. you will indicate how much you are interested in watching the entire movie.

        After watching the movie trailer, how interested are you in watching the full movie?

        Please rate your interest on a scale from 1 to 9, where 1 means not interested at all and 9 means extremely interested.

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent intereste_number_1
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent interest_not_text
      letterHeight = 0.04
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Not interested at all
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    TextComponent interest_number_2
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent interest_number_3
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent interest_number_4
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent interest_number_5
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent interest_number_6
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent interest_number_7
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent interest_number_8
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent interest_number_9
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent interest_intersted_text
      letterHeight = 0.04
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Extremely interested
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    KeyboardComponent key_resp_10
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_sam_sad
    TextComponent text_19
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Which picture below best describes your feelings about how sad or happy the movie trailer was?

        Press the number key 1 to 9 to choose a coressponding option.
    KeyboardComponent key_resp_happy_sad
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad1_image_2
      image = SAM/Sad1.jpg
      pos = (-0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad2_image_2
      image = SAM/Sad2.jpg
      pos = (-0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad3_image_2
      image = SAM/Sad3.jpg
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad4_image_2
      image = SAM/Sad4.jpg
      pos = (0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_sad5_image_2
      image = SAM/Sad5.jpg
      pos = (0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent sam_sad_number1_2
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent sam_sad_number2_2
      letterHeight = 0.03
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent sam_sad_number3_2
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent sam_sad_number4_2
      letterHeight = 0.03
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent sam_sad_number5_2
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent sam_sad_number6_2
      letterHeight = 0.03
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent sam_sad_number7_2
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent sam_sad_number8_2
      letterHeight = 0.03
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent sam_sad_number9_2
      letterHeight = 0.03
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent sam_sad_text_2
      letterHeight = 0.03
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Sad
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    TextComponent sam_happy_text_2
      letterHeight = 0.03
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Happy
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  Routine response_sam_bored
    TextComponent text_20
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Which picture below best describes your feelings about how excited or boring the movie trailer was?

        Press the number key 1 to 9 to choose a coressponding option.
    KeyboardComponent key_resp_excited_boring
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored1_image_2
      image = SAM/Excited1.jpg
      pos = (-0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored2_image_2
      image = SAM/Excited2.jpg
      pos = (-0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored3_image_2
      image = SAM/Excited3.jpg
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored5_image_2
      image = SAM/Excited4.jpg
      pos = (0.3, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sam_bored4_image_2
      image = SAM/Excited5.jpg
      pos = (0.6, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent sam_bored_number1_2
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent sam_bored_number2_2
      letterHeight = 0.03
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent sam_bored_number3_2
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent sam_bored_number4_2
      letterHeight = 0.03
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent sam_bored_number5_2
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent sam_bored_number6_2
      letterHeight = 0.03
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent sam_bored_number7_2
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent sam_bored_number8_2
      letterHeight = 0.03
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent sam_bored_number9_2
      letterHeight = 0.03
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent sam_bored_text_2
      letterHeight = 0.03
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Boring
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    TextComponent sam_excited_text_2
      letterHeight = 0.03
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = Exciting
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  Routine response_genre
    TextComponent text_21
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Which of the following genres do you think best describes the movie that you just watched?

        Press the number key 1 to 6 to choose a coressponding option.
    TextComponent genre_thriller_2
      letterHeight = 0.03
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        Thriller
    TextComponent genre_horror_2
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        Horror
    TextComponent genre_drama_2
      letterHeight = 0.03
      pos = (-0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        3

        Drama
    TextComponent genre_action_2
      letterHeight = 0.03
      pos = (0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        4

        Action
    TextComponent genre_romance_2
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        5

        Romance
    TextComponent genre_comedy_2
      letterHeight = 0.03
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        6

        Comedy
    KeyboardComponent key_resp_genre
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_interest
    TextComponent text_22
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        After watching the movie trailer, how interested are you in watching the full movie?

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent intereste_number
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent interest_not_text_2
      letterHeight = 0.04
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Not interested at all
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    TextComponent interest_number
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent interest_number_10
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent interest_number_11
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent interest_number_12
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent interest_number_13
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent interest_number_14
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent interest_number_15
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent interest_number_16
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent interest_intersted_text_2
      letterHeight = 0.04
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Extremely interested
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    KeyboardComponent key_resp_interest
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_enjoyment
    TextComponent text_23
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much did you enjoy watching the movie trailer?

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent enjoyment_number
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent enjoyment_not_text_2
      letterHeight = 0.04
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Did not enjoy at all
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    TextComponent enjoyment_number_10
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent enjoyment_number_11
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent enjoyment_number_12
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent enjoyment_number_13
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent enjoyment_number_14
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent enjoyment_number_15
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent enjoyment_number_16
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent enjoyment_number_17
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
      text = 9
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    TextComponent enjoyment_yes_text_2
      letterHeight = 0.04
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Enjoyed extremely
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    KeyboardComponent key_resp_enjoyment
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_willingness
    TextComponent text_24
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you were to purchase a movie ticket in a movie theater for the movie you just watched, how much are you willing to pay for it?

        Press the number key 1 to 9 on your keyboard to choose a coressponding option.
    TextComponent willing_pay
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        \$1
    TextComponent willing_pay_10
      letterHeight = 0.04
      pos = (-0.45, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        \$2
    TextComponent willing_pay_11
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        3

        \$3
    TextComponent willing_pay_12
      letterHeight = 0.04
      pos = (-0.15, -0.3)
      startVal [time (s)] = 0.0
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      text:
        4

        \$4
    TextComponent willing_pay_13
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        5

        \$5
    TextComponent willing_pay_14
      letterHeight = 0.04
      pos = (0.15, -0.3)
      startVal [time (s)] = 0.0
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      text:
        6

        \$6
    TextComponent willing_pay_15
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        7

        \$7
    TextComponent willing_pay_16
      letterHeight = 0.04
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
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      text:
        8

        \$8
    TextComponent willing_pay_17
      letterHeight = 0.04
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        9

        \$9
    KeyboardComponent key_resp_willingness
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_watched_trailer
    TextComponent text_25
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Have you watched this movie trailer before?

        Press the number key 1 or 2 on your keyboard to choose a coressponding option.
    TextComponent watched_trailer_no_2
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        No, I have not watched this trailer before.
    TextComponent watched_trailer_yes_2
      letterHeight = 0.04
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        Yes, I have watched this trailer before.
    KeyboardComponent key_resp_watched_trailer
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_watched_movie
    TextComponent text_26
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Have you watched this movie before?

        Press the number key 1 or 2 on your keyboard to choose a coressponding option.
    TextComponent watched_movie_no_2
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        1

        No, I have not watched this movie before.
    TextComponent watched_movie_yes_2
      letterHeight = 0.04
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        2

        Yes, I have watched this movie before.
    KeyboardComponent key_resp_watched_movie
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine screen_fixation
  Routine instruction_1
  Routine instruction_2
  Routine instruction_3
  Routine instruction_4
  Routine instruction_5
  Routine screen_fixation
  Routine calibration_instruction
  EyetrackerCalibrationRoutine calibration_training
  Routine watching_instruction
  Routine watch_training
  Routine response_instruction_1
  Routine screen_fixation
  Routine response_instruction_2
  Routine screen_fixation
  Routine response_instruction_3
  Routine screen_fixation
  Routine response_instruction_4
  Routine screen_fixation
  Routine response_instruction_5
  Routine screen_fixation
  Routine response_instruction_6
  Routine screen_fixation
  Routine response_instruction_7
  Routine screen_fixation
  Routine response_instruction_8
  Routine screen_fixation
  Routine response_instruction_9
  Routine screen_fixation
  Routine response_instruction_10
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop_condition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trailer_condition', 'stimulus/trailers/a_real_pain.mp4')]),
      OrderedDict([('trailer_condition', 'stimulus/trailers/babygirl.mp4')]),
      OrderedDict([('trailer_condition', 'stimulus/trailers/gladiator_2.mp4')]),
      OrderedDict([('trailer_condition', 'stimulus/trailers/mufasa_the_lion_king.mp4')]),
      OrderedDict([('trailer_condition', 'stimulus/trailers/nickel_boys.mp4')]),
      OrderedDict([('trailer_condition', 'stimulus/trailers/the_damned.mp4')])]
    Routine screen_fixation
    EyetrackerCalibrationRoutine calibration_test
    Routine watching_instruction
    Routine watch_session
    Routine response_instruction_1
    Routine screen_fixation
    Routine response_sam_sad
    Routine screen_fixation
    Routine response_sam_bored
    Routine screen_fixation
    Routine response_genre
    Routine screen_fixation
    Routine response_interest
    Routine screen_fixation
    Routine response_enjoyment
    Routine screen_fixation
    Routine response_willingness
    Routine screen_fixation
    Routine response_watched_movie
    Routine screen_fixation
    Routine response_watched_trailer
    Routine screen_fixation
    Routine rest_session
  LoopTerminator trials
  Routine end_instruction
